---
API: 2.1
OpenSesame: 3.2.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/Daan/Documents/GitHub/usermodels"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define loop arithmetic
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 30
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 difficulty easy
	setcycle 0 question_no "2 + 4"
	setcycle 0 tasktype arithmetic
	setcycle 0 new_column_1 ""
	setcycle 1 difficulty medium
	setcycle 1 question_no "3x = 15"
	setcycle 1 tasktype arithmetic
	setcycle 1 new_column_1 ""
	setcycle 2 difficulty hard
	setcycle 2 question_no "4x - 2 = 10"
	setcycle 2 tasktype arithmetic
	setcycle 2 new_column_1 ""
	setcycle 3 difficulty easy
	setcycle 3 question_no "3 + 7"
	setcycle 3 tasktype arithmetic
	setcycle 3 new_column_1 ""
	setcycle 4 difficulty medium
	setcycle 4 question_no "2x = 6"
	setcycle 4 tasktype arithmetic
	setcycle 4 new_column_1 ""
	setcycle 5 difficulty hard
	setcycle 5 question_no "3x - 3 = 6"
	setcycle 5 tasktype arithmetic
	setcycle 5 new_column_1 ""
	setcycle 6 difficulty easy
	setcycle 6 question_no "4 + 3"
	setcycle 6 tasktype arithmetic
	setcycle 6 new_column_1 ""
	setcycle 7 difficulty medium
	setcycle 7 question_no "6x = 12"
	setcycle 7 tasktype arithmetic
	setcycle 7 new_column_1 ""
	setcycle 8 difficulty hard
	setcycle 8 question_no "3x - 5 = 10"
	setcycle 8 tasktype arithmetic
	setcycle 8 new_column_1 ""
	setcycle 9 difficulty easy
	setcycle 9 question_no "6 + 2"
	setcycle 9 tasktype arithmetic
	setcycle 9 new_column_1 ""
	setcycle 10 difficulty medium
	setcycle 10 question_no "4x = 16"
	setcycle 10 tasktype arithmetic
	setcycle 10 new_column_1 ""
	setcycle 11 difficulty hard
	setcycle 11 question_no "3x - 8 = 7"
	setcycle 11 tasktype arithmetic
	setcycle 11 new_column_1 ""
	setcycle 12 difficulty easy
	setcycle 12 question_no "1 + 8"
	setcycle 12 tasktype arithmetic
	setcycle 12 new_column_1 ""
	setcycle 13 difficulty medium
	setcycle 13 question_no "7x = 28"
	setcycle 13 tasktype arithmetic
	setcycle 13 new_column_1 ""
	setcycle 14 difficulty hard
	setcycle 14 question_no "7x - 3 = 18"
	setcycle 14 tasktype arithmetic
	setcycle 14 new_column_1 ""
	setcycle 15 difficulty easy
	setcycle 15 question_no "4 + 3"
	setcycle 15 tasktype arithmetic
	setcycle 15 new_column_1 ""
	setcycle 16 difficulty medium
	setcycle 16 question_no "3x = 12"
	setcycle 16 tasktype arithmetic
	setcycle 16 new_column_1 ""
	setcycle 17 difficulty hard
	setcycle 17 question_no "2x + 5 = 17"
	setcycle 17 tasktype arithmetic
	setcycle 17 new_column_1 ""
	setcycle 18 difficulty easy
	setcycle 18 question_no "3 + 2"
	setcycle 18 tasktype arithmetic
	setcycle 18 new_column_1 ""
	setcycle 19 difficulty medium
	setcycle 19 question_no "7x = 56"
	setcycle 19 tasktype arithmetic
	setcycle 19 new_column_1 ""
	setcycle 20 difficulty hard
	setcycle 20 question_no "4x - 4 = 28"
	setcycle 20 tasktype arithmetic
	setcycle 20 new_column_1 ""
	setcycle 21 difficulty easy
	setcycle 21 question_no "7 + 2"
	setcycle 21 tasktype arithmetic
	setcycle 21 new_column_1 ""
	setcycle 22 difficulty medium
	setcycle 22 question_no "5x = 35"
	setcycle 22 tasktype arithmetic
	setcycle 22 new_column_1 ""
	setcycle 23 difficulty hard
	setcycle 23 question_no "8x - 4 = 4"
	setcycle 23 tasktype arithmetic
	setcycle 23 new_column_1 ""
	setcycle 24 difficulty easy
	setcycle 24 question_no "6 - 4"
	setcycle 24 tasktype arithmetic
	setcycle 24 new_column_1 ""
	setcycle 25 difficulty medium
	setcycle 25 question_no "4x = 24"
	setcycle 25 tasktype arithmetic
	setcycle 25 new_column_1 ""
	setcycle 26 difficulty hard
	setcycle 26 question_no "9x - 2 = 16"
	setcycle 26 tasktype arithmetic
	setcycle 26 new_column_1 ""
	setcycle 27 difficulty easy
	setcycle 27 question_no "5 + 6"
	setcycle 27 tasktype arithmetic
	setcycle 27 new_column_1 ""
	setcycle 28 difficulty medium
	setcycle 28 question_no "8x = 16"
	setcycle 28 tasktype arithmetic
	setcycle 28 new_column_1 ""
	setcycle 29 difficulty hard
	setcycle 29 question_no "5x - 8 = 14"
	setcycle 29 tasktype arithmetic
	setcycle 29 new_column_1 ""
	run trial_sequence

define sketchpad arithmetic_task
	set duration 1
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[question_no]" x=0 y=0 z_index=0

define sketchpad blank_screen_1
	set duration 1
	set description "Displays stimuli"

define sequence blocksequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run practice_instructions always
	run arithmetic always
	run instructions2 always
	run reversal always

define inline_script calc_slope
	set description "Executes Python code"
	___run__
	# Remove blinks first
	var.pupilsizes = var.pupilsizes[var.pupilsizes != 0]
	# Now calc slope
	var.result = stats.linregress(list(range(1,len(var.pupilsizes)+1)), var.pupilsizes)
	var.slope = var.result.slope
	__end__
	___prepare__
	import numpy as np
	from scipy import stats
	__end__

define inline_script calc_slope_1
	set description "Executes Python code"
	___run__
	# Remove blinks first
	var.pupilsizes = var.pupilsizes[var.pupilsizes != 0]
	#get slope
	var.result = stats.linregress(list(range(1,len(var.pupilsizes)+1)), var.pupilsizes)
	var.slope = var.result.slope
	__end__
	___prepare__
	import numpy as np
	from scipy import stats
	__end__

define inline_script collect_pupil_trace
	set description "Executes Python code"
	___run__
	if 'dummy' in exp.items['pygaze_init'].tracker_type:
		pylink = None
	else:
		import pylink
	import numpy as np
	
	def collectPupilTrace(dur, fd=10):
		
		"""
		desc:
			Returns an array of recorded pupil-size values.
			
		arguments:
			itemArray:		An ItemArray object.
			dur:			The recording duration.
			fd:				The frame duration in milliseconds.
			
		returns:
			A numpy array that with a dur/fd length.
		"""
		count = 0;
		t0 = self.time()
		a = np.zeros(dur/fd)
		_dt = 0
		#df = open(('F:\Documents\HMC\User Models\pupildata.txt'),'a')
		while _dt < dur:	
			count = count+1;
			if pylink != None:
				ps = eyetracker.pupil_size()
			else:
				# Use Y coordinate of mouse
				#ps = my_mouse.get_pos()[0][1]+var.height/2
				
				ps = 2
				if(count%2==0):
					ps=0
			dt = self.time()-t0
	
			a[int(_dt/fd):int(dt/fd)] = ps
			_dt = dt
			#df.write(str(ps))
		#df.close()		
		return a
	__end__
	set _prepare ""

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to exit" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run instructions always
	run pygaze_init always
	run collect_pupil_trace always
	run training always
	run end_of_practice always
	run end_of_experiment always

define sketchpad fixation_cross
	set duration 2000
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_cross_1
	set duration 2000
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define inline_script get_baseline
	set description "Executes Python code"
	___run__
	var.baselinetrace = collectPupilTrace(750)
	var.str_baseline = ','.join([str(i) for i in var.baselinetrace])
	__end__
	set _prepare ""

define inline_script get_baseline_1
	set description "Executes Python code"
	___run__
	var.baselinetrace = collectPupilTrace(750)
	var.str_baseline = ','.join([str(i) for i in var.baselinetrace])
	__end__
	set _prepare ""

define inline_script getdata
	set description "Executes Python code"
	___run__
	var.pupilsizes = collectPupilTrace(5000)
	var.str_pupilsizes = ','.join([str(i) for i in var.pupilsizes])
	__end__
	___prepare__
	from time import sleep
	__end__

define inline_script getdata_1
	set description "Executes Python code"
	___run__
	var.pupilsizes = collectPupilTrace(4000)
	var.str_pupilsizes = ','.join([str(i) for i in var.pupilsizes])
	__end__
	set _prepare ""

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to begin!" x=0 y=0 z_index=0

define form_text_display instructions2
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Start next part of the experiment"
	set margins "50;50;50;50"
	set form_title Instructions
	set form_text "Look at and remember the word. When it disappears, reverse the letters in your head. Make sure to start when the word has disappeared."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad letter_task_1
	set duration 1
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[question_no]" x=0 y=0 z_index=0

define inline_script new_inline_script
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1
	set description "Logs experimental data"
	set auto_log yes

define pygaze_drift_correct new_pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered yes
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_drift_correct new_pygaze_drift_correct_1
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered yes
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_log new_pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_log new_pygaze_log_2
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_start_recording new_pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define pygaze_start_recording new_pygaze_start_recording_1
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording new_pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define pygaze_stop_recording new_pygaze_stop_recording_1
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define form_text_display practice_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	The training phase for arithmetic questions will start now. 
	Mentally calculate the following expressions:
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define pygaze_init pygaze_init
	set tracker_type "Simple dummy"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set _logfile automatic

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define loop reversal
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 30
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 difficulty easy
	setcycle 0 question_no cat
	setcycle 0 tasktype reversal
	setcycle 1 difficulty medium
	setcycle 1 question_no demon
	setcycle 1 tasktype reversal
	setcycle 2 difficulty hard
	setcycle 2 question_no exactly
	setcycle 2 tasktype reversal
	setcycle 3 difficulty easy
	setcycle 3 question_no dog
	setcycle 3 tasktype reversal
	setcycle 4 difficulty medium
	setcycle 4 question_no seven
	setcycle 4 tasktype reversal
	setcycle 5 difficulty hard
	setcycle 5 question_no digital
	setcycle 5 tasktype reversal
	setcycle 6 difficulty easy
	setcycle 6 question_no pen
	setcycle 6 tasktype reversal
	setcycle 7 difficulty medium
	setcycle 7 question_no death
	setcycle 7 tasktype reversal
	setcycle 8 difficulty hard
	setcycle 8 question_no meeting
	setcycle 8 tasktype reversal
	setcycle 9 difficulty easy
	setcycle 9 question_no cup
	setcycle 9 tasktype reversal
	setcycle 10 difficulty medium
	setcycle 10 question_no satan
	setcycle 10 tasktype reversal
	setcycle 11 difficulty hard
	setcycle 11 question_no nuclear
	setcycle 11 tasktype reversal
	setcycle 12 difficulty easy
	setcycle 12 question_no bed
	setcycle 12 tasktype reversal
	setcycle 13 difficulty medium
	setcycle 13 question_no glass
	setcycle 13 tasktype reversal
	setcycle 14 difficulty hard
	setcycle 14 question_no lucifer
	setcycle 14 tasktype reversal
	setcycle 15 difficulty easy
	setcycle 15 question_no pen
	setcycle 15 tasktype reversal
	setcycle 16 difficulty medium
	setcycle 16 question_no quick
	setcycle 16 tasktype reversal
	setcycle 17 difficulty hard
	setcycle 17 question_no puzzels
	setcycle 17 tasktype reversal
	setcycle 18 difficulty easy
	setcycle 18 question_no sad
	setcycle 18 tasktype reversal
	setcycle 19 difficulty medium
	setcycle 19 question_no jumps
	setcycle 19 tasktype reversal
	setcycle 20 difficulty hard
	setcycle 20 question_no against
	setcycle 20 tasktype reversal
	setcycle 21 difficulty easy
	setcycle 21 question_no mad
	setcycle 21 tasktype reversal
	setcycle 22 difficulty medium
	setcycle 22 question_no jacks
	setcycle 22 tasktype reversal
	setcycle 23 difficulty hard
	setcycle 23 question_no airline
	setcycle 23 tasktype reversal
	setcycle 24 difficulty easy
	setcycle 24 question_no ten
	setcycle 24 tasktype reversal
	setcycle 25 difficulty medium
	setcycle 25 question_no jumps
	setcycle 25 tasktype reversal
	setcycle 26 difficulty hard
	setcycle 26 question_no arrival
	setcycle 26 tasktype reversal
	setcycle 27 difficulty easy
	setcycle 27 question_no tan
	setcycle 27 tasktype reversal
	setcycle 28 difficulty medium
	setcycle 28 question_no enzym
	setcycle 28 tasktype reversal
	setcycle 29 difficulty hard
	setcycle 29 question_no believe
	setcycle 29 tasktype reversal
	run trial_sequence_1

define inline_script test
	set description "Executes Python code"
	___run__
	var.t1 = self.time()
	var.t2 = var.t1 - var.t0
	__end__
	set _prepare ""

define inline_script test1
	set description "Executes Python code"
	set _run "var.t0 = self.time()"
	set _prepare ""

define loop training
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run blocksequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run new_pygaze_drift_correct always
	run new_pygaze_start_recording always
	run fixation_cross always
	run get_baseline always
	run arithmetic_task always
	run getdata always
	run calc_slope always
	run new_pygaze_log always
	run new_logger always
	run new_pygaze_stop_recording always

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "A single trial"
	run new_pygaze_drift_correct_1 always
	run new_pygaze_start_recording_1 always
	run fixation_cross_1 always
	run letter_task_1 always
	run get_baseline_1 always
	run blank_screen_1 always
	run getdata_1 always
	run calc_slope_1 always
	run new_pygaze_log_2 always
	run new_logger_1 always
	run new_pygaze_stop_recording_1 always

